################################
#
# TrueBeam kV imaging System, Full fan option and focal spot either small or large
#
################################

################################
### RUN CONTROL
################################
:start run control:
    ncase = 1.5E12
    #calculation = combine
    #nchunk = 50
    nbatch = 3
:stop run control:

################################
### GEOMETRY
################################
:start geometry definition:

    ################################
    ### Anode target
    ################################
    :start geometry:
        library = egs_glib
        name = anode
        include file = anode.egsinp
    :stop geometry:

    ################################
    ### X-ray window
    ################################
    :start geometry:
        library = egs_glib
        name = xray_window
        include file = x-ray_window_no_materia.egsinp
    :stop geometry:

    ################################
    ### Pb port
    ################################
    :start geometry:
        library = egs_glib
        name = pb_port
        include file = pb_port.egsinp
    :stop geometry:

    ################################
    ### Blades
    ################################
    :start geometry:
        library = egs_glib
        name = blades
        include file = blades13_5x10.egsinp
    :stop geometry:

    ################################
	### Combining
	################################

	### Adding anode, x-ray window, pb port, primary collimator and faceplate
    :start geometry:
        name = model
        library = egs_gunion
		geometries = anode xray_window pb_port blades
    :stop geometry:

    ### air in x ray window
    :start geometry:
        name = air_window
        library = egs_cones
        type = EGS_ConeStack
        axis = 0 0 3 0 0 4.075
        :start layer:
            thickness = 1.075
            top radii = 2.7261
            bottom radii = 2.7261
            media = air
        :stop layer:
    :stop geometry:

    ### Air between x-ray window and faceplate
    :start geometry:
        name = air
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -6 6
        y-planes = -6 6
        z-planes = 5.0 8.9
        :start media input:
            media = air
        :stop media input:
    :stop geometry:

    ### Air block from faceplate to end
    :start geometry:
        name = air_block
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -6.9 6.9
        y-planes = -6.9 6.9
        z-planes = 8.8 12.1
        :start media input:
            media = air
        :stop media input:
    :stop geometry:

    :start geometry:
        name = obi
        library = egs_gunion
        geometries = model air air_block air_window
    :stop geometry:

    ### Air between source and water
    :start geometry:
        name = air_prim_to_detector
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -30 30
        y-planes = -30 30
        z-planes = 12 120
        :start media input:
            media = air
        :stop media input:
    :stop geometry:

    ### styrox
    :start geometry:
        name = styrox
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -35 35
        y-planes = -35 35
        z-planes = 100 121
        :start media input:
            media = polystyrene
        :stop media input:
    :stop geometry:

    ### Profile x direction
    :start geometry:
        name = profilex
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-slabs = -20 1 40
	    #x-slabs = -20 0.2 200
        y-slabs = -0.5 1 1
        z-slabs = 100 0.1 1
        :start media input:
            media = film
        :stop media input:
        set label = Prof 4
    :stop geometry:

    ### Testing all System
    :start geometry:
        name = obi_system
        library = egs_gunion
	    ### Add profilex, profiley or pdd
        geometries = profilex obi styrox air_prim_to_detector
    :stop geometry:

	################################
	### TESTING GEOMETRY
	################################

	### Testing cathode anode
	:start geometry:
        name = src
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -1.5 1.5
        y-planes = -1.3 2.5
        z-planes = -1.5 10
        :start media input:
            media = vacuum
        :stop media input:
    :stop geometry:

	### Geometry that contains testing geometry for source
    :start geometry:
        name = source_test
        library = egs_gunion
        geometries = anode src
    :stop geometry:

    :start geometry:
        name = profilexRR
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -20.5 20.5
        y-planes = -1 1
        z-planes = 99.5 101
    :stop geometry:

	################################
	### SIMULATION GEOMETRY
	################################

	### Testing source
	simulation geometry = obi_system

:stop geometry definition:

################################
### MEDIA
################################
:start media definition: # Only 1 media definition block allowed
	# Defining media in the input file like this is called "pegsless" mode

	### Cutoff energies, in MeV
	ae = 0.512 # lowest energy for electrons (kinetic+0.511)
	ap = 0.001 # lowest energy for photons (kinetic)
	ue = 1.511 # maximum energy for electrons (kinetic+0.511)
	up = 1 # maximum energy for photons (kinetic)

	### Beryllium
	:start beryllium:
		bremsstrahlung correction=NRC
		density correction file = beryllium
	:stop beryllium:
	
	### Air
	:start air:
		bremsstrahlung correction=NRC
		gas pressure = 1.0
		density correction file = air_dry_nearsealevel
	:stop air:
	
	### Oil CrossTrans™ 206 (https://www.recarroll.com/cw3/Assets/product_files/Crosstrans%20206%20spec.pdf)
	:start oil:
		#elements = H,C
		#number of atoms = 10,20
		#rho=0.891
		bremsstrahlung correction = NRC
        density correction file = napthalene
	:stop oil:

	### Aluminum
	:start aluminum:
		bremsstrahlung correction=NRC
		density correction file = aluminum
	:stop aluminum:

	### Stainless steel
	:start steel:
		bremsstrahlung correction=NRC
		density correction file = steel_stainless_type302
	:stop steel:

	### Pb
	:start pb:
		bremsstrahlung correction=NRC
		density correction file = lead
	:stop pb:

	### Titanium
	:start titanium:
		bremsstrahlung correction=NRC
		density correction file=titanium
	:stop titanium:

    ### polystyrene
	:start polystyrene:
		bremsstrahlung correction=NRC
		density correction file= polystyrene
	:stop polystyrene:

    ### Film
	:start film:
		bremsstrahlung correction=NRC
		density correction file= radiochromicdyefilm_nylonbase
	:stop film:

	### Water
	:start water:
		bremsstrahlung correction=NRC
		density correction file= water_icru90
	:stop water:

    ### Carbonate
    :start carbonate:
        bremsstrahlung correction=NRC
        density correction file = polycarbonate__makrolon___lexan_
    :stop carbonate:

	### Target material (95% W (rho=19.3) and 5% Re (rho=21.02))
	:start target_material:
		rho=19.386
		elements=W,Re
		mass fractions=0.95,0.05
		bremsstrahlung correction=NRC
    :stop target_material:

	### Molybdenum
	:start molybdenum:
		bremsstrahlung correction=NRC
        density correction file = molybdenum
    :stop molybdenum:

    ### Graphite(rho=2.13)
	:start graphite:
		bremsstrahlung correction=NRC
        density correction file = carbon_graphite_icru90_2.0g_cm3
    :stop graphite:

:stop media definition:

################################
### SOURCE
################################
:start source definition:

    :start source:
        name = cathode_src
	library = egs_parallel_beam
	charge = -1
	direction = 0 0 -1
	:start spectrum:
	    type = monoenergetic
	    energy = 0.1 # in MeV
	:stop spectrum:
        #:start shape:
    	    #library = egs_gaussian_shape
            :start shape:
                library = egs_ellipse
                ## Large electron spot on the target: Length [5.78699mm, 8.26713mm] -> avg. 0.703 cm, Width [4.13357mm, 5.78699mm] -> avg 0.4$
                #halfaxis = 0.248014 0.351353
                ## Small electron spot on the target: Length [2.48014mm, 3.51353mm] -> avg 0.30 cm, Width [1.65343mm, 2.48014mm] -> avg 0.206$
                halfaxis = 0.10333925 0.14984175
                ## The smallest large electron spot on the target: Length = 5.78699mm, Width = 4.13357mm
                #halfaxis = 0.2066785 0.2893495
                midpoint = 0 0
            :stop shape:
            ## sigma = FWHM/(2*sqrt(2*ln(2)))
            ## Large electron spot
            #sigma = 0.210643697 0.298411762
            ## Small electron spot
            #sigma = 0.0877682779 0.127263865

            ## sigma = FWHM/(2*sqrt(2*ln(2))) * 20%
            ## Large electron spot (halfaxis on the target [~0.27, ~0.38] according to egs_view)
            #sigma = 0.0421287394  0.0596823524
            ## Small electron spot (halfaxis on the target [~0.105, ~0.16] according to egs_view)
            #sigma = 0.01755365558 0.025452773
        #:stop shape:
    :stop source:

    :start source:
        library = egs_transformed_source
        name = cathode_ellipse
        source name = cathode_src
        :start transformation:
            rotation = 1 0 0 0 0 1 0 1 0
        :stop transformation:
    :stop source:

	:start source:
        library = egs_transformed_source
        name = cathode
        source name = cathode_ellipse
        :start transformation:
            rotation vector = 1.9405 -0.483843 0
			translation = 0 2 0.49865600
        :stop transformation:
    :stop source:

	### Use the source by this name for the simulation
	simulation source = cathode
:stop source definition:

################################
### AUSGAB OBJECTS
################################
:start ausgab object definition: # Only 1 ausgab definition block allowed
	### Particle tracks
	:start ausgab object:
		name = tracks
		library = egs_track_scoring
		score electrons = no
		score positrons = no
    	stop scoring   = 10000
	:stop ausgab object:

    :start ausgab object:
        library = egs_radiative_splitting
        name = splitting
        splitting = 1000
    :stop ausgab object:

    ### Dose scoring object to x profile
    :start ausgab object:
        library = egs_dose_scoring
        name = profilexFilm
        medium dose = no
        region dose = yes
        :start output dose file:
            geometry name = profilex
            file type = 3ddose
        :stop output dose file:
    :stop ausgab object:

:stop ausgab object definition:

################################
### MC PARAMETERS
################################
:Start MC Transport Parameter:

    Global ECUT= 0.512
    Global PCUT= 0.001
    Global SMAX= 1e10
    ESTEPE= 0.25
    XIMAX= 0.5
    Boundary crossing algorithm= EXACT
    Skin depth for BCA= 3
    Electron-step algorithm= PRESTA-II
    Spin effects= On
    Brems angular sampling= KM
    Brems cross sections= NRC
    Triplet production= On
    Bound Compton scattering= On
    Compton cross sections= default
    Radiative Compton corrections= On
    Radiative Compton corrections= On
    Pair angular sampling= KM
    Pair cross sections= NRC
    Photoelectron angular sampling= On
    Rayleigh scattering= On
    Atomic relaxations= On
    Electron impact ionization= On
    Photon cross sections= mcdf-xcom
    Photon cross-sections output= Off
    Photonuclear attenuation= Off
:Stop MC Transport Parameter:


##############################################################################
### SCORING OPTIONS
##############################################################################
:start scoring options:

    calculation type = dose

    :start calculation geometry:
        geometry name    = obi_system
        cavity regions   = Prof
        #excluded regions = 0  # exclude particles passing through these regions
        cavity mass      = 1  # 5 cm radius air sphere
    :stop calculation geometry:

:stop scoring options:

##############################################################################
### VARIANCE REDUCTION
##############################################################################
:start variance reduction:
    split brem photons = 100
    bcse medium = anode 100
    photon splitting = 100
    :start range rejection:
        rejection = 100
        Esave     = 1
        cavity geometry = profilexRR
        rejection range medium = water
    :stop range rejection:
:stop variance reduction:


################################
### VIEWER CONTROL
################################
:start view control:
	# Here we are just assigning some colors for nice
	# viewing in the egs_view application
	set color = air 225 225 225 200
	set color = beryllium 162 0 0 200
	set color = oil 255 255 0 200
	set color = aluminum 0 0 255 200
	set color = steel 0 255 0 200
	set color = pb 255 85 0 200
	set color = water 85 170 255 200
	set color = titanium 0 170 127 250
    set color = carbonate 170 85 0 200
	set color = target_material 85 225 127 200
    set color = molybdenum 0 170 225 200
	set color = graphite 170 85 127 200
	set color = vacuum 225 225 225 50
    set color = polystyrene 150 115 225 200
:stop view control:
