################################
#
# TrueBeam kV imaging System, Full fan option and focal spot either small or large
#
################################

################################
### RUN CONTROL
################################
:start run control:
    ncase = 6E8
    #calculation = combine
    nchunk = 50000
    nbatch = 10
:stop run control:

################################
### GEOMETRY
################################
:start geometry definition:

    ################################
    ### Blades
    ################################
	:start geometry:
        library = egs_glib
        name = blades
        include file = blades50x50.egsinp
    :stop geometry:

	################################
    ### Beam hardening filter
    ################################
	:start geometry:
        library = egs_glib
        name = hard_filt
        include file = hardening_filter.egsinp
    :stop geometry:

    ################################
	### Detection cover
	################################
    :start geometry:
        library = egs_glib
        name = cover
        include file = cover.egsinp
    :stop geometry:

    ################################
	### Combining
	################################

	### Adding the beam hardening filter and cover
    :start geometry:
        name = prim_coll_and_blades_and_hard
        library = egs_gunion
		geometries = blades hard_filt cover
    :stop geometry:

    ### Air block from faceplate to end
    :start geometry:
        name = air_block
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -7.1 7.1
        y-planes = -7.1 7.1
        z-planes = 8.8 18.5
        :start media input:
            media = air
        :stop media input:
    :stop geometry:

    ### Geometry from source to bow tie filter + air block
    :start geometry:
        name    = obi
        library = egs_gunion
        geometries = prim_coll_and_blades_and_hard air_block
    :stop geometry:

	################################
	### TESTING GEOMETRY
	################################

	### Air between primary_collimator and detector to testing primary collimator so that 504x504 mm x-ray field at 1m from the focal spot
    :start geometry:
        name = air_prim_to_detector
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -55 55
        y-planes = -55 55
        z-planes = 5.7 100.1
        :start media input:
            media = air
        :stop media input:
    :stop geometry:

	### Testing primary collimator so that 504x504 mm x-ray field at 1m from the focal spot
	:start geometry:
        name = detect
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -55 -25.2 25.2 55
        y-planes = -55 -25.2 25.2 55
        z-planes = 100 100.5
        :start media input:
            media = water
        :stop media input:
    :stop geometry:

    ### Air between primary_collimator and detector to testing blades so that 26.4 x 19.8 cm x-ray field at 1m from the focal spot
    :start geometry:
        name = air_prim_to_detector1
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -50 50
        y-planes = -50 50
        z-planes = 5.7 100.1
        :start media input:
            media = air
        :stop media input:
    :stop geometry:

	### water tank
	:start geometry:
        name = tank
        library = egs_ndgeometry
        type = EGS_XYZGeometry
		x-planes = -50 50
        y-planes = -50 50
        z-planes = 100 121
        :start media input:
            media = water
        :stop media input:
    :stop geometry:

    ### Profile x direction
    :start geometry:
        name = profilex
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -40 -39.5 -39 -38.5 -38 -37.5 -37 -36.5 -36 -35.5 -35 -34.5 -34 -33.5 -33 -32.5 -32 -31.5 -31 -30.5 -30 -29.5 -29 -28.5 -28 -27.5 -27 -26.5 -26 -25.5 -25 -24.5 -24 -23.5 -23 -22.5 -22 -21.5 -21 -20.5 -20 -19.5 -19 -18.5 -18 -17.5 -17 -16.5 -16 -15.5 -15 -14.5 -14 -13.5 -13 -12.5 -12 -11.5 -11 -10.5 -10 -9.5 -9 -8.5 -8 -7.5 -7 -6.5 -6 -5.5 -5 -4.5 -4 -3.5 -3 -2.5 -2 -1.5 -1 -0.5 0 0.5 1 1.5 2 2.5 3 3.5 4 4.5 5 5.5 6 6.5 7 7.5 8 8.5 9 9.5 10 10.5 11 11.5 12 12.5 13 13.5 14 14.5 15 15.5 16 16.5 17 17.5 18 18.5 19 19.5 20 20.5 21 21.5 22 22.5 23 23.5 24 24.5 25 25.5 26 26.5 27 27.5 28 28.5 29 29.5 30 30.5 31 31.5 32 32.5 33 33.5 34 34.5 35 35.5 36 36.5 37 37.5 38 38.5 39 39.5 40
        y-planes = -0.5 0.5
        z-planes = 100.9 101.1
        :start media input:
            media = water
        :stop media input:
    :stop geometry:

    ### Profile y direction
    :start geometry:
        name = profiley
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -0.5 0.5
        y-planes = -40 -39.5 -39 -38.5 -38 -37.5 -37 -36.5 -36 -35.5 -35 -34.5 -34 -33.5 -33 -32.5 -32 -31.5 -31 -30.5 -30 -29.5 -29 -28.5 -28 -27.5 -27 -26.5 -26 -25.5 -25 -24.5 -24 -23.5 -23 -22.5 -22 -21.5 -21 -20.5 -20 -19.5 -19 -18.5 -18 -17.5 -17 -16.5 -16 -15.5 -15 -14.5 -14 -13.5 -13 -12.5 -12 -11.5 -11 -10.5 -10 -9.5 -9 -8.5 -8 -7.5 -7 -6.5 -6 -5.5 -5 -4.5 -4 -3.5 -3 -2.5 -2 -1.5 -1 -0.5 0 0.5 1 1.5 2 2.5 3 3.5 4 4.5 5 5.5 6 6.5 7 7.5 8 8.5 9 9.5 10 10.5 11 11.5 12 12.5 13 13.5 14 14.5 15 15.5 16 16.5 17 17.5 18 18.5 19 19.5 20 20.5 21 21.5 22 22.5 23 23.5 24 24.5 25 25.5 26 26.5 27 27.5 28 28.5 29 29.5 30 30.5 31 31.5 32 32.5 33 33.5 34 34.5 35 35.5 36 36.5 37 37.5 38 38.5 39 39.5 40
        z-planes = 100.9 101.1
        :start media input:
            media = water
        :stop media input:
    :stop geometry:

    ### PDD
    :start geometry:
        name = pdd
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -0.5 0.5
        y-planes = -0.5 0.5
        z-planes = 100.1  100.3  100.5  100.7  100.9  101.1  101.3  101.5  101.7  101.9  102.1  102.3  102.5  102.7  102.9  103.1  103.3  103.5  103.7  103.9  104.1  104.3  104.5  104.7  104.9  105.1  105.3  105.5  105.7  105.9  106.1  106.3  106.5  106.7  106.9  107.1  107.3  107.5  107.7  107.9  108.1  108.3  108.5  108.7  108.9  109.1  109.3  109.5  109.7  109.9  110.1  110.3  110.5  110.7  110.9  111.1  111.3  111.5  111.7  111.9  112.1  112.3  112.5  112.7  112.9  113.1  113.3  113.5  113.7  113.9  114.1  114.3  114.5  114.7  114.9  115.1  115.3  115.5  115.7  115.9  116.1  116.3  116.5  116.7  116.9  117.1  117.3  117.5  117.7  117.9  118.1  118.3  118.5  118.7  118.9  119.1  119.3  119.5  119.7  119.9  120.1
        :start media input:
            media = water
        :stop media input:
    :stop geometry:

    ### Testing all System
    :start geometry:
        name = obi_test
        library = egs_gunion
        geometries = obi profilex profiley pdd tank air_prim_to_detector1
    :stop geometry:

    ### Geometry for Russian Roulette

	:start geometry:
        name = pddRR
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -1 1
        y-planes = -1 1
        z-planes = 100 120
    :stop geometry:

    :start geometry:
        name = profileyRR
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -1 1
        y-planes = -41 41
        z-planes = 100 102
    :stop geometry:

    :start geometry:
        name = profilexRR
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -41 41
        y-planes = -1 1
        z-planes = 100 102
    :stop geometry:

    :start geometry:
        name = cavity
        library = egs_gunion
        geometries = profilexRR profileyRR pddRR
    :stop geometry:

	################################
	### SIMULATION GEOMETRY
	################################

	### Use the geometry with this name for the simulation
	simulation geometry = obi_test

:stop geometry definition:

################################
### MEDIA
################################
:start media definition: # Only 1 media definition block allowed
	# Defining media in the input file like this is called "pegsless" mode

	### Cutoff energies, in MeV
	ae = 0.512 # lowest energy for electrons (kinetic+0.511)
	ap = 0.001 # lowest energy for photons (kinetic)
	ue = 1.511 # maximum energy for electrons (kinetic+0.511)
	up = 1 # maximum energy for photons (kinetic)

	### Beryllium
	:start beryllium:
		bremsstrahlung correction=NRC
		density correction file = beryllium
	:stop beryllium:
	
	### Air
	:start air:
		bremsstrahlung correction=NRC
		gas pressure = 1.0
		density correction file = air_dry_nearsealevel
	:stop air:
	
	### Oil
	:start oil:
		elements = H, C
		number of atoms = 10,20
		rho=0.890550008
		bremsstrahlung correction = NRC
	:stop oil:

	### Aluminum
	:start aluminum:
		bremsstrahlung correction=NRC
		density correction file = aluminum
	:stop aluminum:

	### Stainless steel
	:start steel:
		bremsstrahlung correction=NRC
		density correction file = steel_stainless_type302
	:stop steel:

	### Pb
	:start pb:
		bremsstrahlung correction=NRC
		density correction file = lead
	:stop pb:

	### Titanium
	:start titanium:
		bremsstrahlung correction=NRC
		density correction file=titanium
	:stop titanium:

	### Water
	:start water:
		bremsstrahlung correction=NRC
		density correction file= water_icru90
	:stop water:

    ### Carbonate
    :start carbonate:
        bremsstrahlung correction=NRC
        density correction file = polycarbonate__makrolon___lexan_
    :stop carbonate:

	### Target material (95% W (rho=19.3) and 5% Re (rho=21.02))
	:start target_material:
		rho=19.386
		elements=W,Re
		mass fractions=0.95,0.05
		bremsstrahlung correction=NRC
    :stop target_material:

	### Molybdenum
	:start molybdenum:
		bremsstrahlung correction=NRC
        density correction file = molybdenum
    :stop molybdenum:

    ### Graphite(rho=2.13)
	:start graphite:
		bremsstrahlung correction=NRC
        density correction file = carbon_graphite_icru90_2.0g_cm3
    :stop graphite:

:stop media definition:

################################
### SOURCE
################################
:start source definition: 

	:start source:
        library = egs_phsp_source
        name = my_source
        phase space file = phsp.egsphsp1
        particle type = all
        #cutout = x1 x2 y1 y2  (optional)
        #weight window = wmin wmax, the min and max particle weights to use. If the particle weight is not in this range, it is rejected. (optional)
        #recycle photons = 100
        #recycle electrons = 100
    :stop source:

    simulation source = my_source
:stop source definition:

################################
### AUSGAB OBJECTS
################################
:start ausgab object definition: # Only 1 ausgab definition block allowed
	### Particle tracks
	#:start ausgab object:
	#	name = tracks
	#	library = egs_track_scoring
	#	score electrons = no
	#	score positrons = no
    #	stop scoring   = 1000000
	#:stop ausgab object:

    :start ausgab object:
        library = egs_radiative_splitting
        name = splitting
        splitting = 1000
    :stop ausgab object:

	### Dose scoring object
	:start ausgab object:
		name = dose
		library = egs_dose_scoring
		medium dose = no
		region dose = yes
		volume = 0.1  0.1  0.2
		dose start region = 3240 6480 9720
		dose stop region = 3399 6639 9819
	:stop ausgab object:

    ### Dose scoring object to x profile
	:start ausgab object:
        library = egs_dose_scoring
        name = profilexScor
        medium dose = no
        region dose = yes
        :start output dose file:
            geometry name = profilex
            file type = 3ddose
        :stop output dose file:
    :stop ausgab object:

    ### Dose scoring object to y profile
	:start ausgab object:
        library = egs_dose_scoring
        name = profileyScor
        medium dose = no
        region dose = yes
        :start output dose file:
            geometry name = profiley
            file type = 3ddose
        :stop output dose file:
    :stop ausgab object:

    ### Dose scoring object to pdd
	:start ausgab object:
        library = egs_dose_scoring
        name = pddScor
        medium dose = no
        region dose = yes
        :start output dose file:
            geometry name = pdd
            file type = 3ddose
        :stop output dose file:
    :stop ausgab object:
:stop ausgab object definition:

################################
### MC PARAMETERS
################################
:Start MC Transport Parameter:

    Global ECUT= 0.512
    Global PCUT= 0.001
    Global SMAX= 1e10
    ESTEPE= 0.25
    XIMAX= 0.5
    Boundary crossing algorithm= EXACT
    Skin depth for BCA= 3
    Electron-step algorithm= PRESTA-II
    Spin effects= On
    Brems angular sampling= KM
    Brems cross sections= NRC
    Triplet production= On
    Bound Compton scattering= On
    Compton cross sections= default
    Radiative Compton corrections= On
    Pair angular sampling= KM
    Pair cross sections= NRC
    Photoelectron angular sampling= On
    Rayleigh scattering= On
    Atomic relaxations= On
    Electron impact ionization= On
    Photon cross sections= mcdf-xcom
    Photon cross-sections output= Off
    Photonuclear attenuation= On
:Stop MC Transport Parameter:


##############################################################################
### SCORING OPTIONS
##############################################################################
:start scoring options:

    calculation type = dose

    :start calculation geometry:
        geometry name    = obi_test
        cavity regions   = 74
        #excluded regions = 0  # exclude particles passing through these regions
        cavity mass      = 1  # 5 cm radius air sphere
    :stop calculation geometry:

:stop scoring options:

##############################################################################
### VARIANCE REDUCTION
##############################################################################
:start variance reduction:
    split brem photons = 100
    bcse medium = anode 100
    photon splitting = 100
    :start range rejection:
        rejection = 100
        Esave     = 1
        cavity geometry = cavity
        rejection range medium = water
    :stop range rejection:
:stop variance reduction:


################################
### VIEWER CONTROL
################################
:start view control:
	# Here we are just assigning some colors for nice
	# viewing in the egs_view application
	set color = air 225 225 225 200
	set color = beryllium 162 0 0 200
	set color = oil 255 255 0 200
	set color = aluminum 0 0 255 200
	set color = steel 0 255 0 200
	set color = pb 255 85 0 200
	set color = water 85 170 255 200
	set color = titanium 0 170 127 250
    set color = carbonate 170 85 0 200
	set color = target_material 85 225 127 200
    set color = molybdenum 0 170 225 200
	set color = graphite 170 85 127 200
	set color = vacuum 225 225 225 50
:stop view control:
