################################
#
# TrueBeam kV imaging System, Full fan option and focal spot either small or large
#
################################

################################
### RUN CONTROL
################################
:start run control:
    ncase = 2.8E9
    calculation = combine
    nchunk = 50
    nbatch = 3
:stop run control:

################################
### GEOMETRY
################################
:start geometry definition:

    ################################
    ### Blades
    ################################
    :start geometry:
        library = egs_glib
        name = blades
        include file = blades13_3x10.egsinp
    :stop geometry:

    ################################
    ### Beam hardening filter
    ################################
    :start geometry:
        library = egs_glib
        name = hard_filt
        include file = hardening_filterReal.egsinp
    :stop geometry:

    ################################
    ### Detection cover
    ################################
    :start geometry:
        library = egs_glib
        name = cover
        include file = cover.egsinp
    :stop geometry:

    ################################
    ### Combining
    ################################

    ### Adding the beam hardening filter and cover
    :start geometry:
        name = prim_coll_and_blades_and_hard
        library = egs_gunion
	geometries = blades hard_filt cover
    :stop geometry:

    ### Air block from faceplate to end
    :start geometry:
        name = air_block
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -7.2 7.2
        y-planes = -7.2 7.2
        z-planes = 8.8 18.5
        :start media input:
            media = air
        :stop media input:
    :stop geometry:

    ### Geometry from source to bow tie filter + air block
    :start geometry:
        name    = obi
        library = egs_gunion
        geometries = prim_coll_and_blades_and_hard air_block
    :stop geometry:

    ################################
    ### TESTING GEOMETRY
    ################################

    ### Air between source and water
    :start geometry:
        name = air_prim_to_detector
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -30 30
        y-planes = -30 30
        z-planes = 8.752 120
        :start media input:
            media = air
        :stop media input:
    :stop geometry:

    ### styrox
    :start geometry:
        name = styrox
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -35 35
        y-planes = -35 35
        z-planes = 100 121
        :start media input:
            media = polystyrene
        :stop media input:
    :stop geometry:

   ### Plane before blades
    :start geometry:
        name = planeBefBlades
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-slabs = -7.1 0.2 72
        y-slabs = -7.5 1.0 14
        z-slabs = 8.9 0.1 1
        :start media input:
            media = air
        :stop media input:
        set label = BBla 0
    :stop geometry:

    ### Plane after blades
    :start geometry:
        name = planeBlade
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-slabs = -7.1 0.2 72
        y-slabs = -7.5 1.0 14
        z-slabs = 11.5 1.0 1
        :start media input:
            media = air
        :stop media input:
        set label = ABla 1
    :stop geometry:

   ### Plane after hardening filter
    :start geometry:
        name = planeHardFilt
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-slabs = -7.1 0.2 72
        y-slabs = -7.5 1.0 14
        z-slabs = 13.5 1.0 1
        :start media input:
            media = air
        :stop media input:
        set label = AHaFl 2
    :stop geometry:

   ### Plane after cover
    :start geometry:
        name = planeCover
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-slabs = -7.1 0.2 72
        y-slabs = -7.5 1.0 14
        z-slabs = 18.5 1.0 1
        :start media input:
            media = air
        :stop media input:
        set label = ACo 3
    :stop geometry:

    ### Profile x direction
    :start geometry:
        name = profilex
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-slabs = -20 1 40
	    #x-slabs = -20 0.2 200
        y-slabs = -0.5 1 1
        z-slabs = 100 0.1 1
        :start media input:
            media = film
        :stop media input:
        set label = Prof 4
    :stop geometry:

    ### Profile y direction
    :start geometry:
        name = profiley
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -0.5 0.5
        y-planes = -20 -19 -18 -17 -16 -15 -14 -13 -12 -11 -10 -9 -8 -7 -6 -5 -4 -3 -2 -1 0 1 2 3 4 5 6 7 8 9 10 11 12 13 14 15 16 17 18 19 20
        z-planes = 100 100.5
        :start media input:
            media = water
        :stop media input:
    :stop geometry:

    ### PDD
    :start geometry:
        name = pdd
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -0.5 0.5
        y-planes = -0.5 0.5
        z-planes = 100 101 102 103 104 105 106 107 108 109 110 111 112 113 114 115 116 117 118 119 120
        :start media input:
            media = water
        :stop media input:
    :stop geometry:

    ### Testing all System
    :start geometry:
        name = obi_system
        library = egs_gunion
	### Add profilex, profiley or pdd
        #geometries = profilex planeBefBlades planeBlade planeHardFilt planeCover obi tank air_prim_to_detector
        geometries = profilex obi styrox air_prim_to_detector
    :stop geometry:

    ### Geometry for Russian Roulette

	:start geometry:
        name = pddRR
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -1 1
        y-planes = -1 1
        z-planes = 99.5 120.5
    :stop geometry:

    :start geometry:
        name = profileyRR
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -1 1
        y-planes = -20.5 20.5
        z-planes = 99.5 101
    :stop geometry:

    :start geometry:
        name = profilexRR
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -20.5 20.5
        y-planes = -1 1
        z-planes = 99.5 101
    :stop geometry:

    :start geometry:
        name = cavity
        library = egs_gunion
        geometries = pddRR profileyRR profilexRR
    :stop geometry:

	################################
	### SIMULATION GEOMETRY
	################################

	### Use the geometry with this name for the simulation
	simulation geometry = obi_system

:stop geometry definition:

################################
### MEDIA
################################
:start media definition: # Only 1 media definition block allowed
	# Defining media in the input file like this is called "pegsless" mode

	### Cutoff energies, in MeV
	ae = 0.512 # lowest energy for electrons (kinetic+0.511)
	ap = 0.001 # lowest energy for photons (kinetic)
	ue = 1.511 # maximum energy for electrons (kinetic+0.511)
	up = 1 # maximum energy for photons (kinetic)

	### Beryllium
	:start beryllium:
		bremsstrahlung correction=NRC
		density correction file = beryllium
	:stop beryllium:
	
	### Air
	:start air:
		bremsstrahlung correction=NRC
		gas pressure = 1.0
		density correction file = air_dry_nearsealevel
	:stop air:
	
	### Oil
	:start oil:
		#elements = H,C
		#number of atoms = 10,20
		#rho=0.891
		bremsstrahlung correction = NRC
        density correction file = napthalene
	:stop oil:

	### Aluminum
	:start aluminum:
		bremsstrahlung correction=NRC
		density correction file = aluminum
	:stop aluminum:

	### Stainless steel
	:start steel:
		bremsstrahlung correction=NRC
		density correction file = steel_stainless_type302
	:stop steel:

	### Pb
	:start pb:
		bremsstrahlung correction=NRC
		density correction file = lead
	:stop pb:

	### Titanium
	:start titanium:
		bremsstrahlung correction=NRC
		density correction file=titanium
	:stop titanium:

	### polystyrene
	:start polystyrene:
		bremsstrahlung correction=NRC
		density correction file= polystyrene
	:stop polystyrene:

    ### Carbonate
    :start carbonate:
        bremsstrahlung correction=NRC
        density correction file = polycarbonate__makrolon___lexan_
    :stop carbonate:

    ### Water
	:start water:
		bremsstrahlung correction=NRC
		density correction file= water_icru90
	:stop water:

    ### Film
	:start film:
		bremsstrahlung correction=NRC
		density correction file= radiochromicdyefilm_nylonbase
	:stop film:

	### Target material (95% W (rho=19.3) and 5% Re (rho=21.02))
	:start target_material:
		rho=19.386
		elements=W,Re
		mass fractions=0.95,0.05
		bremsstrahlung correction=NRC
    :stop target_material:

	### Molybdenum
	:start molybdenum:
		bremsstrahlung correction=NRC
        density correction file = molybdenum
    :stop molybdenum:

    ### Graphite(rho=2.13)
	:start graphite:
		bremsstrahlung correction=NRC
        density correction file = carbon_graphite_icru90_2.0g_cm3
    :stop graphite:

:stop media definition:

################################
### SOURCE
################################
:start source definition: 

   :start source:
        library = iaea_phsp_source
        name = my_source
        iaea phase space file = sourcePhspEllipseKerma.1
        particle type = all
        #cutout = x1 x2 y1 y2
        #weight window = 0.99 1.01
        recycle photons = 25
        recycle electrons = 25
        #reuse photons = 4
        #reuse electrons = 4
    :stop source:

    simulation source = my_source
:stop source definition:

################################
### AUSGAB OBJECTS
################################
:start ausgab object definition: # Only 1 ausgab definition block allowed
    ### Particle tracks
    :start ausgab object:
        name = tracks
        library = egs_track_scoring
        score electrons = no
        score positrons = no
        stop scoring   = 1000000
    :stop ausgab object:

    ### Dose scoring object to x profile
    :start ausgab object:
        library = egs_dose_scoring
        name = profilexFilm
        medium dose = no
        region dose = yes
        :start output dose file:
            geometry name = profilex
            file type = 3ddose
        :stop output dose file:
    :stop ausgab object:

    ### Dose scoring object to y profile
    #:start ausgab object:
    #    library = egs_dose_scoring
    #    name = profileyScorReuse
    #    medium dose = no
    #    region dose = yes
    #    :start output dose file:
    #        geometry name = profiley
    #       file type = 3ddose
    #    :stop output dose file:
    #:stop ausgab object:

    ### Dose scoring object to pdd
    #:start ausgab object:
    #    library = egs_dose_scoring
    #    name = pddScorReuse
    #    medium dose = no
    #    region dose = yes
    #    :start output dose file:
    #        geometry name = pdd
    #        file type = 3ddose
    #    :stop output dose file:
    #:stop ausgab object:

:stop ausgab object definition:

################################
### MC PARAMETERS
################################
:Start MC Transport Parameter:

    Global ECUT= 0.512
    Global PCUT= 0.001
    Global SMAX= 1e10
    ESTEPE= 0.25
    XIMAX= 0.5
    Boundary crossing algorithm= EXACT
    Skin depth for BCA= 3
    Electron-step algorithm= PRESTA-II
    Spin effects= On
    Brems angular sampling= KM
    Brems cross sections= NRC
    Triplet production= On
    Bound Compton scattering= On
    Compton cross sections= default
    Radiative Compton corrections= On
    Pair angular sampling= KM
    Pair cross sections= NRC
    Photoelectron angular sampling= On
    Rayleigh scattering= On
    Atomic relaxations= On
    Electron impact ionization= On
    Photon cross sections= mcdf-xcom
    Photon cross-sections output= Off
    Photonuclear attenuation= On
:Stop MC Transport Parameter:


##############################################################################
### SCORING OPTIONS
##############################################################################
:start scoring options:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 0
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 1
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 2
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 3
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 4
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 5
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 6
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 7
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 8
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 9
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 10
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 11
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 12
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 13
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 14
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 15
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 16
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 17
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 18
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 19
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 20
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 21
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 22
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 23
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 24
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 25
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 26
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 27
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 28
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 29
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 30
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 31
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 32
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 33
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 34
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 35
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 36
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 37
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 38
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = obi_system
        cavity regions       = 39
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 0
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 1
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 2
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 3
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 4
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 5
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 6
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 7
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 8
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 9
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 10
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 11
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 12
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 13
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 14
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 15
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 16
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 17
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 18
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 19
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 20
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 21
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 22
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 23
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 24
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 25
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 26
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 27
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 28
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 29
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 30
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 31
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 32
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 33
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 34
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 35
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 36
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 37
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 38
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### use the same geometry under two different names, for easier bookeeping
    :start calculation geometry:
        geometry name         = profilex
        cavity regions       = 39
        cavity mass = 1 # mass in g for each scoring region
        #scoring volume mass  = 0.631 # alternatively: mass for whole scoring volume
    :stop calculation geometry:

    ### fluence scoring requested (common to all calculation geometries)
    :start fluence scoring:
        minimum energy = 0.001
        maximum energy = 0.1
        number of bins = 10
        scale          = linear
    :stop fluence scoring:

    ### E*muen file (could also be E*mutr): absolute or relative file path
    #emuen file = emuen_rho_air_1keV-1.5MeV.data
    ### Use absolute path when submitting parallel jobs!!!
    ### $EGS_HOME replaced with its value now
    #emuen file = /home/miia/EGSnrc/egs_home/egs_kerma/emuen_rho_air_1keV-1.5MeV.data
    emuen file = /home/rsmina/EGSnrc/egs_home/egs_kerma/emuen_rho_air_1keV-1.5MeV.data

    ### geometry for forced-detection (if omitted, score ONLY when reaching scoring region)
    Default FD geometry = obi_system

:stop scoring options:

##############################################################################
### VARIANCE REDUCTION
##############################################################################
:start variance reduction:
    split brem photons = 100
    bcse medium = anode 100
    photon splitting = 100
    :start range rejection:
        rejection = 100
        Esave     = 1
        cavity geometry = profilexRR
        rejection range medium = air
    :stop range rejection:
:stop variance reduction:


################################
### VIEWER CONTROL
################################
:start view control:
	# Here we are just assigning some colors for nice
	# viewing in the egs_view application
	set color = air 225 225 225 200
	set color = beryllium 162 0 0 200
	set color = oil 255 255 0 200
	set color = aluminum 0 0 255 200
	set color = steel 0 255 0 200
	set color = pb 255 85 0 200
	set color = water 85 170 255 200
	set color = titanium 0 170 127 250
    set color = carbonate 170 85 0 200
	set color = target_material 85 225 127 200
    set color = molybdenum 0 170 225 200
	set color = graphite 170 85 127 200
	set color = vacuum 225 225 225 50
    set color = polystyrene 150 115 225 200
:stop view control:
