
###############################################################################
#
#  EGSnrc egs++ tutor7pp application sample input with particle tracks
#  Copyright (C) 2015 National Research Council Canada
#
#  This file is part of EGSnrc.
#
#  EGSnrc is free software: you can redistribute it and/or modify it under
#  the terms of the GNU Affero General Public License as published by the
#  Free Software Foundation, either version 3 of the License, or (at your
#  option) any later version.
#
#  EGSnrc is distributed in the hope that it will be useful, but WITHOUT ANY
#  WARRANTY; without even the implied warranty of MERCHANTABILITY or FITNESS
#  FOR A PARTICULAR PURPOSE.  See the GNU Affero General Public License for
#  more details.
#
#  You should have received a copy of the GNU Affero General Public License
#  along with EGSnrc. If not, see <http://www.gnu.org/licenses/>.
#
###############################################################################
#
#  Author:          Iwan Kawrakow, 2009
#
#  Contributors:
#
###############################################################################
#
#  An example input file for tutor7pp that illustrates the generation of
#  particle tracks
#
###############################################################################


######################################## Define the geometry:
#                                        a 1mm plate of tantalum
#
:start geometry definition:
    :start geometry:
        library = egs_box
        box size = 0.2 0.2 0.2
        name = slab
        :start media input:
            media = TA521ICRU
        :stop media input:
    :stop geometry:

    ### Air between x-ray window and faceplate
    :start geometry:
        name = air
        library = egs_ndgeometry
        type = EGS_XYZGeometry
        x-planes = -0.1 0.1
        y-planes = -0.1 0.1
        z-planes = 0.1 0.15
        :start media input:
            media = AIR521ICRU
        :stop media input:
    :stop geometry:

    :start geometry:
        name = test
        library = egs_gunion
        geometries = slab air
    :stop geometry:

    simulation geometry = test
:stop geometry definition:

######################################## Define the source:
#                                        a 20 MeV pencil beam of electrons
#
:start source definition:
    :start source:
        library = egs_parallel_beam
        name = the_source
        :start shape:
            type = point
            position = 0 0 -0.1
        :stop shape:
        direction = 0 0 1
        charge = -1
        :start spectrum:
            type = monoenergetic
            energy = 20.0
        :stop spectrum:
    :stop source:

    simulation source = the_source

:stop source definition:

######################################### Transport parameters
#                                         you can add any other option
#                                         supported by EGSnrc
#
:start MC transport parameter:

    Global ECUT = 1.5
    Global PCUT = 0.1

:stop MC transport parameter:


######################################## Run control
:start run control:
    ncase = 20000
:stop run control:

######################################### Scoring options.
#        The entire section that follows can be missing. If missing, just
#        energy deposition fractions will be calculated. If present,
#        the user can specify in which regions to score a pulse height
#        distribution.
#
:start scoring options:
:stop scoring options:

:start ausgab object definition:

    :start ausgab object:

        library = egs_track_scoring
        score photons   = yes
        score electrons = yes
        score positrons = yes

    :stop ausgab object:

    ### Dose scoring object
	:start ausgab object:
		name = dose
		library = egs_dose_scoring
		dose regions = 1
		volume = 1
	:stop ausgab object:

:stop ausgab object definition:
